def model modules as

  def comp rat_flow_interp_BC_type as
    var t: second {pub: in};
    var T: second {pub: in};
    var v: m3_per_s {pub: out};
    var P: J_per_m3 {pub: in};
    var t_loc: second {pub: out};
    t_loc = t-floor(t/T)*T;
    var t_0: second {pub: out};
    var t_1: second {pub: out};
    var t_2: second {pub: out};
    var t_3: second {pub: out};
    var t_4: second {pub: out};
    var t_5: second {pub: out};
    var t_6: second {pub: out};
    var t_7: second {pub: out};
    var t_8: second {pub: out};
    var t_9: second {pub: out};
    var t_10: second {pub: out};
    var t_11: second {pub: out};
    var t_12: second {pub: out};
    var t_13: second {pub: out};
    var t_14: second {pub: out};
    var t_15: second {pub: out};
    var t_16: second {pub: out};
    var t_17: second {pub: out};
    var t_18: second {pub: out};
    var t_19: second {pub: out};
    var t_20: second {pub: out};
    var t_21: second {pub: out};
    var q_0: m3_per_s {pub: out};
    var q_1: m3_per_s {pub: out};
    var q_2: m3_per_s {pub: out};
    var q_3: m3_per_s {pub: out};
    var q_4: m3_per_s {pub: out};
    var q_5: m3_per_s {pub: out};
    var q_6: m3_per_s {pub: out};
    var q_7: m3_per_s {pub: out};
    var q_8: m3_per_s {pub: out};
    var q_9: m3_per_s {pub: out};
    var q_10: m3_per_s {pub: out};
    var q_11: m3_per_s {pub: out};
    var q_12: m3_per_s {pub: out};
    var q_13: m3_per_s {pub: out};
    var q_14: m3_per_s {pub: out};
    var q_15: m3_per_s {pub: out};
    var q_16: m3_per_s {pub: out};
    var q_17: m3_per_s {pub: out};
    var q_18: m3_per_s {pub: out};
    var q_19: m3_per_s {pub: out};
    var q_20: m3_per_s {pub: out};
    var q_21: m3_per_s {pub: out};
    t_0 = 0.0{second};
    t_1 = 0.003814{second};
    t_2 = 0.007183{second};
    t_3 = 0.010553{second};
    t_4 = 0.013923{second};
    t_5 = 0.017292{second};
    t_6 = 0.020662{second};
    t_7 = 0.022346{second};
    t_8 = 0.024031{second};
    t_9 = 0.027401{second};
    t_10 = 0.030770{second};
    t_11 = 0.034140{second};
    t_12 = 0.042564{second};
    t_13 = 0.056042{second};
    t_14 = 0.061097{second};
    t_15 = 0.067836{second};
    t_16 = 0.072194{second};
    t_17 = 0.076097{second};
    t_18 = 0.084683{second};
    t_19 = 0.089738{second};
    t_20 = 0.101531{second};
    t_21 = 0.173913{second};
    q_0 = 0.0{m3_per_s};
    q_1 = 0.0{m3_per_s};
    q_2 = 0.000001901057{m3_per_s};
    q_3 = 0.000004942724{m3_per_s};
    q_4 = 0.000007319059{m3_per_s};
    q_5 = 0.000009695358{m3_per_s};
    q_6 = 0.000010265680{m3_per_s};
    q_7 = 0.000010360743{m3_per_s};
    q_8 = 0.000010265680{m3_per_s};
    q_9 = 0.000009695358{m3_per_s};
    q_10 = 0.000008839901{m3_per_s};
    q_11 = 0.000008174534{m3_per_s};
    q_12 = 0.000005703154{m3_per_s};
    q_13 = 0.000003231792{m3_per_s};
    q_14 = 0.000002471362{m3_per_s};
    q_15 = 0.0{m3_per_s};
    q_16 = -0.000002946640{m3_per_s};
    q_17 = -0.000000380211{m3_per_s};
    q_18 = 0.0{m3_per_s};
    q_19 = 0.000000095053{m3_per_s};
    q_20 = 0.0{m3_per_s};
    q_21 = 0.0{m3_per_s};
    v = sel
      case (t_loc >= t_0) and (t_loc <= t_1):
        (1{dimensionless}-(t_loc-t_0)/(t_1-t_0))*q_0+(t_loc-t_0)/(t_1-t_0)*q_1;
      case (t_loc >= t_1) and (t_loc <= t_2):
        (1{dimensionless}-(t_loc-t_1)/(t_2-t_1))*q_1+(t_loc-t_1)/(t_2-t_1)*q_2;
      case (t_loc >= t_2) and (t_loc <= t_3):
        (1{dimensionless}-(t_loc-t_2)/(t_3-t_2))*q_2+(t_loc-t_2)/(t_3-t_2)*q_3;
      case (t_loc >= t_3) and (t_loc <= t_4):
        (1{dimensionless}-(t_loc-t_3)/(t_4-t_3))*q_3+(t_loc-t_3)/(t_4-t_3)*q_4;
      case (t_loc >= t_4) and (t_loc <= t_5):
        (1{dimensionless}-(t_loc-t_4)/(t_5-t_4))*q_4+(t_loc-t_4)/(t_5-t_4)*q_5;
      case (t_loc >= t_5) and (t_loc <= t_6):
        (1{dimensionless}-(t_loc-t_5)/(t_6-t_5))*q_5+(t_loc-t_5)/(t_6-t_5)*q_6;
      case (t_loc >= t_6) and (t_loc <= t_7):
        (1{dimensionless}-(t_loc-t_6)/(t_7-t_6))*q_6+(t_loc-t_6)/(t_7-t_6)*q_7;
      case (t_loc >= t_7) and (t_loc <= t_8):
        (1{dimensionless}-(t_loc-t_7)/(t_8-t_7))*q_7+(t_loc-t_7)/(t_8-t_7)*q_8;
      case (t_loc >= t_8) and (t_loc <= t_9):
        (1{dimensionless}-(t_loc-t_8)/(t_9-t_8))*q_8+(t_loc-t_8)/(t_9-t_8)*q_9;
      case (t_loc >= t_9) and (t_loc <= t_10):
        (1{dimensionless}-(t_loc-t_9)/(t_10-t_9))*q_9+(t_loc-t_9)/(t_10-t_9)*q_10;
      case (t_loc >= t_10) and (t_loc <= t_11):
        (1{dimensionless}-(t_loc-t_10)/(t_11-t_10))*q_10+(t_loc-t_10)/(t_11-t_10)*q_11;
      case (t_loc >= t_11) and (t_loc <= t_12):
        (1{dimensionless}-(t_loc-t_11)/(t_12-t_11))*q_11+(t_loc-t_11)/(t_12-t_11)*q_12;
      case (t_loc >= t_12) and (t_loc <= t_13):
        (1{dimensionless}-(t_loc-t_12)/(t_13-t_12))*q_12+(t_loc-t_12)/(t_13-t_12)*q_13;
      case (t_loc >= t_13) and (t_loc <= t_14):
        (1{dimensionless}-(t_loc-t_13)/(t_14-t_13))*q_13+(t_loc-t_13)/(t_14-t_13)*q_14;
      case (t_loc >= t_14) and (t_loc <= t_15):
        (1{dimensionless}-(t_loc-t_14)/(t_15-t_14))*q_14+(t_loc-t_14)/(t_15-t_14)*q_15;
      case (t_loc >= t_15) and (t_loc <= t_16):
        (1{dimensionless}-(t_loc-t_15)/(t_16-t_15))*q_15+(t_loc-t_15)/(t_16-t_15)*q_16;
      case (t_loc >= t_16) and (t_loc <= t_17):
        (1{dimensionless}-(t_loc-t_16)/(t_17-t_16))*q_16+(t_loc-t_16)/(t_17-t_16)*q_17;
      case (t_loc >= t_17) and (t_loc <= t_18):
        (1{dimensionless}-(t_loc-t_17)/(t_18-t_17))*q_17+(t_loc-t_17)/(t_18-t_17)*q_18;
      case (t_loc >= t_18) and (t_loc <= t_19):
        (1{dimensionless}-(t_loc-t_18)/(t_19-t_18))*q_18+(t_loc-t_18)/(t_19-t_18)*q_19;
      case (t_loc >= t_19) and (t_loc <= t_20):
        (1{dimensionless}-(t_loc-t_19)/(t_20-t_19))*q_19+(t_loc-t_19)/(t_20-t_19)*q_20;
      case (t_loc >= t_20) and (t_loc <= t_21):
        (1{dimensionless}-(t_loc-t_20)/(t_21-t_20))*q_20+(t_loc-t_20)/(t_21-t_20)*q_21;
    endsel;
  enddef;

  def comp pp_T_R1CR2_fixed_I_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_1_T: Js_per_m6 {pub: in};
    var R_2_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    // + u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_1_T)/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_2_T)/I_T;
  enddef;

  def comp rat_material_prop_visco_const_type as
    var t: second {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var Gamma: Js_per_m3 {pub: out};
    var h: metre {pub: out};
    var SMvolfrac_art: dimensionless {pub: in};
    var K_tube_visco: Js_per_m6 {pub: out};
    h = 0.1{dimensionless}*r_0;
    Gamma = SMvolfrac_art*K_m;
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;
enddef;
